PsychoPy2experiment version="3.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.85,0.85,0.85]
  expName = MTEC_paradigm
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Routines
  Routine Welcome_Screen
    TextComponent text_welcome_screen
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
          Welcome
             to the
        Experiment
    KeyboardComponent key_resp_welcome_screen
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instructions_welcome_screen
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'Space' to continue)
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  Routine Blank_Screen
    TextComponent text_blank_screen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Baseline_Screen
    TextComponent text_baseline_screen
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
            Baseline
        Measurement
    TextComponent text_baseline_screen_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Segment One:
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  Routine Baseline_Measurement
    TextComponent text_baseline_measurement
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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  Routine Baseline_End
    TextComponent text_baseline_end
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Segment One.
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    TextComponent text_baseline_end_instructions
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'Space' to continue)
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    KeyboardComponent key_resp_baseline_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Baseline_Instructions
    TextComponent text_baseline_instructions
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
          Please try to relax.

        The Measurement will
               start shortly.
    TextComponent text_baseline_countdown
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 10
      text [set every frame] = $str(round(routineTimer.getTime(),0)) 
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  Routine Stress_Screen
    TextComponent text_stress_screen_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Segment Two:
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    TextComponent text_stress_screen
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Stress Measurement
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  Routine Stress_Part_One_Instructions
    TextComponent text_stress_part_one_instructions_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_stress_part_one_instructions
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Count down from 1400 in steps of 7.

        Try to match the speed of the metronome dot on the screen.

        (Press 'Space' to start)
    KeyboardComponent key_resp_text_stress_part_one_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Stress_Part_Two_Instructions
    TextComponent text_part_two_instructions_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_part_two_instructions
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Choose the color of the word by using the arrow keys.

        (Press 'Space' to start)
  Routine Stress_Part_One_Measurement
    PolygonComponent metronome
      fillColor [set every repeat] = $Color
      lineColor = black
      nVertices = 32
      saveStartStop = False
      shape = regular polygon...
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Stress_Part_Two_Measurement
  Routine Stress_Part_One_End
    TextComponent text_part_one_end
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Part One.
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    TextComponent text_par_one_end_instructions
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'Space' to continue)
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    KeyboardComponent key_resp_part_one_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Stress_Part_Two_End
  Routine Metronom_Tic
    TextComponent text_metronom_tic
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Stress_Part_One
    TextComponent text_stress_part_one_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Part One:
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    TextComponent text_stress_part_one
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 7-Row
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  Routine Stress_Part_Two
    TextComponent text_part_two_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Part Two:
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    TextComponent text_part_two
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Stroop Test
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  Routine Stress_Evaluation
    TextComponent text_part_one_evaluation
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Task finished.

        Please rate the difficulty of the task.
    RatingScaleComponent rating_part_one
      forceEndRoutine = True
      high = 10
      labels = very easy, very hard
      low = 1
      markerStart = 5
      pos = 0, -0.2
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome_Screen
  Routine Blank_Screen
  Routine Baseline_Screen
  Routine Blank_Screen
  Routine Baseline_Instructions
  Routine Blank_Screen
  Routine Baseline_Measurement
  Routine Blank_Screen
  Routine Baseline_End
  Routine Blank_Screen
  Routine Stress_Screen
  Routine Blank_Screen
  Routine Stress_Part_One
  Routine Blank_Screen
  Routine Stress_Part_One_Instructions
  Routine Blank_Screen
  LoopInitiator tick loopType="TrialHandler"
    Selected rows = 1:301
    conditionsFile = stimuli files\metronome.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Tick', 1), ('Color', 'green')]),
      OrderedDict([('Tick', 2), ('Color', 'green')]),
      OrderedDict([('Tick', 3), ('Color', 'green')]),
      OrderedDict([('Tick', 4), ('Color', 'green')]),
      OrderedDict([('Tick', 5), ('Color', 'green')]),
      OrderedDict([('Tick', 6), ('Color', 'green')]),
      OrderedDict([('Tick', 7), ('Color', 'green')]),
      OrderedDict([('Tick', 8), ('Color', 'green')]),
      OrderedDict([('Tick', 9), ('Color', 'green')]),
      OrderedDict([('Tick', 10), ('Color', 'green')]),
      OrderedDict([('Tick', 11), ('Color', 'green')]),
      OrderedDict([('Tick', 12), ('Color', 'green')]),
      OrderedDict([('Tick', 13), ('Color', 'green')]),
      OrderedDict([('Tick', 14), ('Color', 'green')]),
      OrderedDict([('Tick', 15), ('Color', 'green')]),
      OrderedDict([('Tick', 16), ('Color', 'green')]),
      OrderedDict([('Tick', 17), ('Color', 'green')]),
      OrderedDict([('Tick', 18), ('Color', 'green')]),
      OrderedDict([('Tick', 19), ('Color', 'green')]),
      OrderedDict([('Tick', 20), ('Color', 'green')]),
      OrderedDict([('Tick', 21), ('Color', 'green')]),
      OrderedDict([('Tick', 22), ('Color', 'green')]),
      OrderedDict([('Tick', 23), ('Color', 'green')]),
      OrderedDict([('Tick', 24), ('Color', 'green')]),
      OrderedDict([('Tick', 25), ('Color', 'green')]),
      OrderedDict([('Tick', 26), ('Color', 'green')]),
      OrderedDict([('Tick', 27), ('Color', 'green')]),
      OrderedDict([('Tick', 28), ('Color', 'green')]),
      OrderedDict([('Tick', 29), ('Color', 'green')]),
      OrderedDict([('Tick', 30), ('Color', 'green')]),
      OrderedDict([('Tick', 31), ('Color', 'green')]),
      OrderedDict([('Tick', 32), ('Color', 'green')])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
    Routine Stress_Part_One_Measurement
    Routine Metronom_Tic
  LoopTerminator tick
  Routine Blank_Screen
  Routine Stress_Evaluation
  Routine Stress_Part_One_End
  Routine Blank_Screen
  Routine Stress_Part_Two
  Routine Blank_Screen
  Routine Stress_Part_Two_Instructions
  Routine Blank_Screen
  Routine Stress_Part_Two_Measurement
  Routine Blank_Screen
  Routine Stress_Part_Two_End
  Routine Blank_Screen
